PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = eeg_speech_sing_2
  keyboardBackend = ioHub
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Routines
  Routine Rest
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        Thank you!

        30 sec rest
  Routine SpeechRepBlock1
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    SoundComponent wordPresSpeechRep
      sound = A
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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    MicrophoneComponent micResponseSpeechRep
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      transcribe = False
      transcribeBackend = Whisper
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    KeyboardComponent buttonSpeechRep
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.5
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  Routine SpeechGenBlock1
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    SoundComponent wordPresSpeechGen
      sound = w1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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    MicrophoneComponent micResponseSpeechGen
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      transcribe = False
      transcribeBackend = Whisper
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    ButtonComponent buttonSpeechGen
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.5
      text = Click here
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  Routine SongRepBlock1
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    SoundComponent wordPresSongRep
      sound = A
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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    MicrophoneComponent micResponseSongRep
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      transcribe = False
      transcribeBackend = Whisper
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    KeyboardComponent buttonSongRep
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.5
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  Routine SongGenBlock1
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    SoundComponent wordPresSongGen
      sound = A
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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    MicrophoneComponent micResponseSongGen
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      transcribe = False
      transcribeBackend = Whisper
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    KeyboardComponent buttonSongGen
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.5
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  Routine SpeechRepBlock2
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    SoundComponent wordPresSpeechRep_2
      sound = A
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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    MicrophoneComponent micResponseSpeechRep_2
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      transcribe = False
      transcribeBackend = Whisper
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    KeyboardComponent buttonSpeechRep_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.5
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  Routine SpeechGenBlock2
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    SoundComponent wordPresSpeechGen_2
      sound = w1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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    MicrophoneComponent micResponseSpeechGen_2
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      transcribe = False
      transcribeBackend = Whisper
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    ButtonComponent buttonSpeechGen_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.5
      text = Click here
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  Routine SongRepBlock2
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    SoundComponent wordPresSongRep_2
      sound = A
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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    MicrophoneComponent micResponseSongRep_2
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      transcribe = False
      transcribeBackend = Whisper
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    KeyboardComponent buttonSongRep_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.5
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  Routine SongGenBlock2
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    SoundComponent wordPresSongGen_2
      sound = A
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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    MicrophoneComponent micResponseSongGen_2
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      transcribe = False
      transcribeBackend = Whisper
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    KeyboardComponent buttonSongGen_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.5
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  Routine Instruction_SpeechRep1
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  Routine Instruction_SpeechGen1
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  Routine Instruction_SongRep1
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  Routine Instruction_SongGen1
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  Routine Instruction_SpeechRep2
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  Routine Instruction_SpeechGen2
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  Routine Instruction_SongRep2
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  Routine Instruction_SongGen2
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  Routine Finish
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  Routine Instruction_Start
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Instructions for the whole experiment
Flow
  Routine Instruction_Start
  LoopInitiator trials_1_block1 loopType="TrialHandler"
    loopType = random
    nReps = 105
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    Routine Instruction_SpeechRep1
    Routine SpeechRepBlock1
  LoopTerminator trials_1_block1
  Routine Rest
  LoopInitiator trials_2_block1 loopType="TrialHandler"
    loopType = random
    nReps = 105
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    Routine Instruction_SpeechGen1
    Routine SpeechGenBlock1
  LoopTerminator trials_2_block1
  Routine Rest
  LoopInitiator trials_3_block1 loopType="TrialHandler"
    loopType = random
    nReps = 105
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    Routine Instruction_SongRep1
    Routine SongRepBlock1
  LoopTerminator trials_3_block1
  Routine Rest
  LoopInitiator trials_4_block1 loopType="TrialHandler"
    loopType = random
    nReps = 105
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    Routine Instruction_SongGen1
    Routine SongGenBlock1
  LoopTerminator trials_4_block1
  Routine Rest
  LoopInitiator trials_1_block2 loopType="TrialHandler"
    loopType = random
    nReps = 105
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    Routine Instruction_SpeechRep2
    Routine SpeechRepBlock2
  LoopTerminator trials_1_block2
  Routine Rest
  LoopInitiator trials_2_block2 loopType="TrialHandler"
    loopType = random
    nReps = 105
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    Routine Instruction_SpeechGen2
    Routine SpeechGenBlock2
  LoopTerminator trials_2_block2
  Routine Rest
  LoopInitiator trials_3_block2 loopType="TrialHandler"
    loopType = random
    nReps = 105
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    Routine Instruction_SongRep2
    Routine SongRepBlock2
  LoopTerminator trials_3_block2
  Routine Rest
  LoopInitiator trials_4_block2 loopType="TrialHandler"
    loopType = random
    nReps = 105
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    Routine Instruction_SongGen2
    Routine SongGenBlock2
  LoopTerminator trials_4_block2
  Routine Finish
